PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = meta
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Routines
  Routine tela_inicial
    TextComponent texto_tela_inicial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bem vindo ao experimento de metacognição com faces de Mooney.
        Você verá uma sequência de duas imagens e, após vê-las, deverá responder em qual das duas reconhece uma face humana. Apenas uma delas contém uma face.
        Após isso, você deverá informar uma estimativa da sua confiança na resposta, em uma escala de 1 a 5.
        Pressione a tecla “Espaço” do seu teclado para prosseguir.
    KeyboardComponent key_resp_ti
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrucao_resposta
    TextComponent text_ir
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pressione "1" ou "2" caso você reconheça a face humana na primeira ou segunda imagem, respectivamente.

        Você terá dois segundos para responder a essa pergunta.

        Para indicar a confiança da sua resposta não há limite de tempo.

        Pressione a tecla “Espaço” do seu teclado para prosseguir.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucao_inicio
    TextComponent text_ii
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Posicione suas mãos.

        Ao pressionar a tecla "Espaço" do seu teclado o experimento iniciará, com uma cruz de fixação sendo exibida no centro, seguida das imagens e, posteriormente, as perguntas.

        O experimento é composto de 4 blocos de 40 pares cada.

        Pressione a tecla “Espaço” do seu teclado para prosseguir.
    KeyboardComponent key_resp_ii
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine tela_inicial
  Routine instrucao_resposta
  Routine instrucao_inicio
